PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '999', 'run': '999', 'num_stimuli': '100'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = video_presentation
  keyboardBackend = ioHub
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Routines
  Routine waiting_for_scanner
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    KeyboardComponent key_resp_start
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        from glob import glob
        import pandas as pd
        import numpy as np
        import os


        #num_stimuli = 100
      Begin Experiment:
        participant = expInfo['participant']
        session = expInfo['session']
        run = expInfo['run']

        num_stimuli = int(expInfo["num_stimuli"])
        if num_stimuli % 2 != 0:
            raise Exception("Num stimuli must be positive!")

        rating_order = np.random.choice([1,2], 2, replace=False)
        rating_dicts = [
            {"1": 0, "2": 1, "3": 2, "4": 3, "6": 4},
            {"1": 4, "2": 3, "3": 2, "4": 1, "6": 0}
            ]
        rating_dict = rating_dicts[rating_order[0] - 1]

        # Get images
        video_path = f"videos"
        video_list = os.listdir(video_path)

        # Intialize dataframe
        df = pd.DataFrame()
        df["file"] = video_list
        #df["trial"] = [file.split(".")[0] for file in df["file"]]
        #df["type"] = ["image" if ".png" in file else "video" for file in df["file"]]
        #df["category"] = [file.split("_")[0] for file in df["file"]]

        # Get videos at random
        random_indices = np.random.choice(np.arange(len(video_list)), size=num_stimuli, replace=False)
        df = df.iloc[random_indices, :]

        # Random shuffle
        df = df.sample(frac=1).reset_index(drop=True)

        df["onset"] = np.empty(num_stimuli) * np.nan
        df["duration"] = np.empty(num_stimuli) * np.nan
        df["rating"] = np.empty(num_stimuli) * np.nan
        df["response_time"] = np.empty(num_stimuli) * np.nan
        df["rating_order"] = np.repeat(rating_order, num_stimuli/2)
        df["button"] = np.empty(num_stimuli) * np.nan
      Each Frame:
        ## Define key mapping
        #x_pos_dict = {"1": -0.2, "2": -0.1, "3": 0, "4": 0.1, "6": 0.2}
        #
        ## Get kepress
        #keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
        #
        #if keys:
        #    if not 'marker' in locals():
        #        x_pos = x_pos_dict[keys[0]]
        #        marker = visual.ShapeStim(win=win, pos=(0, -0.475), size=(0.05, 0.05), fillColor=[0, 0.75, 0], lineColor=[0, 0, 0], vertices='circle')
        #        marker.pos = (x_pos * -1, -0.4)
        #        marker.setAutoDraw(True)
        #else:
        #    if 'marker' in locals():
        #        core.wait(0.5)
        #        marker.setAutoDraw(False)
        #        del marker
        #
      End Routine:
        timer = core.Clock(0)
    TextComponent text
      color = black
      flip = horiz
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        After each video, you will see a black square. You will have 5 seconds to make a rating on the remote according to the system below.

        At the halfway point, you will be asked to reverse the rating scale
    ImageComponent instruction_image
      flipHoriz = True
      image = $f"images/rating_instruction_{rating_order[0]}.png"
      pos = (0, -0.15)
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
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  Routine dummy
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    PolygonComponent dummy_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine end
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    TextComponent end_text
      color = black
      flip = horiz
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Run complete.
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  Routine video_trial
    RoutineSettingsComponent video_trial
      disabled = True
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    CodeComponent video_trial_code
      Code Type = Py
      Begin Routine:
        if ".mp4" not in df["file"][trials.thisN]:
            is_active = False
            continueRoutine = False
        else:
            is_active = True


        if is_active:
            df.at[trials.thisN, "onset"] = timer.getTime()
      End Routine:
        if is_active:
            df.at[trials.thisN, "duration"] = timer.getTime() - df.at[trials.thisN, "onset"]
            df.to_csv("df.txt", index_label="index")
  Routine washout
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    PolygonComponent washout_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine pause
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    CodeComponent pause_code
      Code Type = Py
      Begin Routine:
        if (not trials.thisN % 15 == 0) or (trials.thisN == 0):
            continueRoutine = False
        else:
            frac_completed = int((trials.thisN + 1) * 100 / len(df))
            break_text.text = f"Break\n\n{frac_completed}% of trials completed\n\nAlert experimenter when you wish to continue"
      Each Frame:
        if key_resp_pause.keys == 'space':
            current_time = timer.getTime()
            margin = current_time - round(current_time) # Should be between 0 and 0.01
            if (margin >= 0) & (margin < 0.01):
                continueRoutine = False
    TextComponent break_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent image_trial_code
      Code Type = Py
      Begin Routine:
        df.at[trials.thisN, "onset"] = timer.getTime()
        flipped = False
      Each Frame:
        if not flipped:
            movie.setFlipHoriz(True)
            flipped = True
      End Routine:
        df.at[trials.thisN, "duration"] = timer.getTime() - df.at[trials.thisN, "onset"]
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $os.path.join(video_path, df.at[trials.thisN, "file"])
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp_trial
      allowedKeys = 'b','y'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine rating
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    CodeComponent rating_code
      Code Type = Py
      Begin Routine:
        ## Clear key buffer
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
      Each Frame:
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])

        if keys:
            df.at[trials.thisN, "rating"] = rating_dict[keys[0]]
            df.at[trials.thisN, "response_time"] = timer.getTime()
            df.at[trials.thisN, "button"] = keys[0]
            print(f"Trial: {trials.thisN}. Rating is: {rating_dict[keys[0]]}")
            continueRoutine = False
      End Routine:
        # Timeout rating
        if keys is None:
            df.at[trials.thisN, "rating"] = pd.NA
            df.at[trials.thisN, "response_time"] = pd.NA
            df.at[trials.thisN, "button"] = pd.NA
            print(f"Trial: {trials.thisN}. Rating is: {pd.NA}")

        # Save data
        if not os.path.exists(f"data/{participant}"):
            os.makedirs(f"data/{participant}")

        df.to_csv(f"data/{participant}/sub-{int(participant):02}_ses-{int(session):02}_task-video_run-{run}_events.tsv", index=False, sep="\t")
    PolygonComponent rating_fixation_square
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine rating_switch
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    ImageComponent rating_instruction_img
      flipHoriz = True
      image = $f"images/rating_instruction_{rating_order[1]}.png"
      pos = (0, -0.15)
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent rating_instruction_text
      color = black
      flip = horiz
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        For the rest of this run, please reverse the way you rate the videos. Use the rating system below.

        Press any button to continue.
    KeyboardComponent rating_instruction_key_resp
      allowedKeys = '1', '2', '3', '4', '6'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent rating_switch_code
      Code Type = Py
      Begin Routine:
        if trials.thisN == num_stimuli / 2:
            rating_dict = rating_dicts[rating_order[1] - 1]
        else:
            continueRoutine = False
Flow
  Routine waiting_for_scanner
  Routine dummy
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(df)
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    Routine rating_switch
    Routine washout
    Routine trial
    Routine rating
  LoopTerminator trials
  Routine washout
  Routine end
