PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'stimuli': '999'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['processed_run-2/beetle_1.mp4', 'processed_run-2/beetle_2.mp4', 'processed_run-2/beetle_3.mp4', 'processed_run-2/beetle_4.mp4', 'processed_run-2/beetle_5.mp4', 'processed_run-2/beetle_6.mp4', 'processed_run-2/beetle_7.mp4', 'processed_run-2/beetle_8.mp4', 'processed_run-2/beetle_9.mp4', 'processed_run-2/beetle_10.mp4', 'processed_run-2/beetle_11.mp4', 'processed_run-2/beetle_12.mp4', 'processed_run-2/beetle_13.mp4', 'processed_run-2/beetle_14.mp4', 'processed_run-2/beetle_15.mp4', 'processed_run-2/beetle_16.mp4', 'processed_run-2/beetle_17.mp4', 'processed_run-2/beetle_18.mp4', 'processed_run-2/beetle_19.mp4', 'processed_run-2/beetle_20.mp4', 'processed_run-2/bull_1.mp4', 'processed_run-2/bull_2.mp4', 'processed_run-2/bull_3.mp4', 'processed_run-2/bull_4.mp4', 'processed_run-2/bull_5.mp4', 'processed_run-2/bull_6.mp4', 'processed_run-2/bull_7.mp4', 'processed_run-2/bull_8.mp4', 'processed_run-2/bull_9.mp4', 'processed_run-2/bull_10.mp4', 'processed_run-2/bull_11.mp4', 'processed_run-2/bull_12.mp4', 'processed_run-2/bull_13.mp4', 'processed_run-2/bull_14.mp4', 'processed_run-2/bull_15.mp4', 'processed_run-2/bull_16.mp4', 'processed_run-2/bull_17.mp4', 'processed_run-2/bull_18.mp4', 'processed_run-2/bull_19.mp4', 'processed_run-2/bull_20.mp4', 'processed_run-2/butterfly_1.mp4', 'processed_run-2/butterfly_2.mp4', 'processed_run-2/butterfly_3.mp4', 'processed_run-2/butterfly_4.mp4', 'processed_run-2/butterfly_5.mp4', 'processed_run-2/butterfly_6.mp4', 'processed_run-2/butterfly_7.mp4', 'processed_run-2/butterfly_8.mp4', 'processed_run-2/butterfly_9.mp4', 'processed_run-2/butterfly_10.mp4', 'processed_run-2/butterfly_11.mp4', 'processed_run-2/butterfly_12.mp4', 'processed_run-2/butterfly_13.mp4', 'processed_run-2/butterfly_14.mp4', 'processed_run-2/butterfly_15.mp4', 'processed_run-2/butterfly_16.mp4', 'processed_run-2/butterfly_17.mp4', 'processed_run-2/butterfly_18.mp4', 'processed_run-2/butterfly_19.mp4', 'processed_run-2/butterfly_20.mp4', 'processed_run-2/cat_1.mp4', 'processed_run-2/cat_2.mp4', 'processed_run-2/cat_3.mp4', 'processed_run-2/cat_4.mp4', 'processed_run-2/cat_5.mp4', 'processed_run-2/cat_6.mp4', 'processed_run-2/cat_7.mp4', 'processed_run-2/cat_8.mp4', 'processed_run-2/cat_9.mp4', 'processed_run-2/cat_10.mp4', 'processed_run-2/cat_11.mp4', 'processed_run-2/cat_12.mp4', 'processed_run-2/cat_13.mp4', 'processed_run-2/cat_14.mp4', 'processed_run-2/cat_15.mp4', 'processed_run-2/cat_16.mp4', 'processed_run-2/cat_17.mp4', 'processed_run-2/cat_18.mp4', 'processed_run-2/cat_19.mp4', 'processed_run-2/cat_20.mp4', 'processed_run-2/crocodile_1.mp4', 'processed_run-2/crocodile_2.mp4', 'processed_run-2/crocodile_3.mp4', 'processed_run-2/crocodile_4.mp4', 'processed_run-2/crocodile_5.mp4', 'processed_run-2/crocodile_6.mp4', 'processed_run-2/crocodile_7.mp4', 'processed_run-2/crocodile_8.mp4', 'processed_run-2/crocodile_9.mp4', 'processed_run-2/crocodile_10.mp4', 'processed_run-2/crocodile_11.mp4', 'processed_run-2/crocodile_12.mp4', 'processed_run-2/crocodile_13.mp4', 'processed_run-2/crocodile_14.mp4', 'processed_run-2/crocodile_15.mp4', 'processed_run-2/crocodile_16.mp4', 'processed_run-2/crocodile_17.mp4', 'processed_run-2/crocodile_18.mp4', 'processed_run-2/crocodile_19.mp4', 'processed_run-2/crocodile_20.mp4', 'processed_run-2/dummy.mp4', 'processed_run-2/millipede_1.mp4', 'processed_run-2/millipede_2.mp4', 'processed_run-2/millipede_3.mp4', 'processed_run-2/millipede_4.mp4', 'processed_run-2/millipede_5.mp4', 'processed_run-2/millipede_6.mp4', 'processed_run-2/millipede_7.mp4', 'processed_run-2/millipede_8.mp4', 'processed_run-2/millipede_9.mp4', 'processed_run-2/millipede_10.mp4', 'processed_run-2/millipede_11.mp4', 'processed_run-2/millipede_12.mp4', 'processed_run-2/millipede_13.mp4', 'processed_run-2/millipede_14.mp4', 'processed_run-2/millipede_15.mp4', 'processed_run-2/millipede_16.mp4', 'processed_run-2/millipede_17.mp4', 'processed_run-2/millipede_18.mp4', 'processed_run-2/millipede_19.mp4', 'processed_run-2/millipede_20.mp4', 'processed_run-2/rabbit_1.mp4', 'processed_run-2/rabbit_2.mp4', 'processed_run-2/rabbit_3.mp4', 'processed_run-2/rabbit_4.mp4', 'processed_run-2/rabbit_5.mp4', 'processed_run-2/rabbit_6.mp4', 'processed_run-2/rabbit_7.mp4', 'processed_run-2/rabbit_8.mp4', 'processed_run-2/rabbit_9.mp4', 'processed_run-2/rabbit_10.mp4', 'processed_run-2/rabbit_11.mp4', 'processed_run-2/rabbit_12.mp4', 'processed_run-2/rabbit_13.mp4', 'processed_run-2/rabbit_14.mp4', 'processed_run-2/rabbit_15.mp4', 'processed_run-2/rabbit_16.mp4', 'processed_run-2/rabbit_17.mp4', 'processed_run-2/rabbit_18.mp4', 'processed_run-2/rabbit_19.mp4', 'processed_run-2/rabbit_20.mp4', 'processed_run-2/rat_1.mp4', 'processed_run-2/rat_2.mp4', 'processed_run-2/rat_3.mp4', 'processed_run-2/rat_4.mp4', 'processed_run-2/rat_5.mp4', 'processed_run-2/rat_6.mp4', 'processed_run-2/rat_7.mp4', 'processed_run-2/rat_8.mp4', 'processed_run-2/rat_9.mp4', 'processed_run-2/rat_10.mp4', 'processed_run-2/rat_11.mp4', 'processed_run-2/rat_12.mp4', 'processed_run-2/rat_13.mp4', 'processed_run-2/rat_14.mp4', 'processed_run-2/rat_15.mp4', 'processed_run-2/rat_16.mp4', 'processed_run-2/rat_17.mp4', 'processed_run-2/rat_18.mp4', 'processed_run-2/rat_19.mp4', 'processed_run-2/rat_20.mp4', 'processed_run-2/tiger_1.mp4', 'processed_run-2/tiger_2.mp4', 'processed_run-2/tiger_3.mp4', 'processed_run-2/tiger_4.mp4', 'processed_run-2/tiger_5.mp4', 'processed_run-2/tiger_6.mp4', 'processed_run-2/tiger_7.mp4', 'processed_run-2/tiger_8.mp4', 'processed_run-2/tiger_9.mp4', 'processed_run-2/tiger_10.mp4', 'processed_run-2/tiger_11.mp4', 'processed_run-2/tiger_12.mp4', 'processed_run-2/tiger_13.mp4', 'processed_run-2/tiger_14.mp4', 'processed_run-2/tiger_15.mp4', 'processed_run-2/tiger_16.mp4', 'processed_run-2/tiger_17.mp4', 'processed_run-2/tiger_18.mp4', 'processed_run-2/tiger_19.mp4', 'processed_run-2/tiger_20.mp4', 'processed_run-2/whale_1.mp4', 'processed_run-2/whale_2.mp4', 'processed_run-2/whale_3.mp4', 'processed_run-2/whale_4.mp4', 'processed_run-2/whale_5.mp4', 'processed_run-2/whale_6.mp4', 'processed_run-2/whale_7.mp4', 'processed_run-2/whale_8.mp4', 'processed_run-2/whale_9.mp4', 'processed_run-2/whale_10.mp4', 'processed_run-2/whale_11.mp4', 'processed_run-2/whale_12.mp4', 'processed_run-2/whale_13.mp4', 'processed_run-2/whale_14.mp4', 'processed_run-2/whale_15.mp4', 'processed_run-2/whale_16.mp4', 'processed_run-2/whale_17.mp4', 'processed_run-2/whale_18.mp4', 'processed_run-2/whale_19.mp4', 'processed_run-2/whale_20.mp4', 'processed_run-1/bird_1.mp4', 'processed_run-1/bird_2.mp4', 'processed_run-1/bird_3.mp4', 'processed_run-1/bird_4.mp4', 'processed_run-1/bird_5.mp4', 'processed_run-1/bird_6.mp4', 'processed_run-1/bird_7.mp4', 'processed_run-1/bird_8.mp4', 'processed_run-1/bird_9.mp4', 'processed_run-1/bird_10.mp4', 'processed_run-1/bird_11.mp4', 'processed_run-1/bird_12.mp4', 'processed_run-1/bird_13.mp4', 'processed_run-1/bird_14.mp4', 'processed_run-1/bird_15.mp4', 'processed_run-1/bird_16.mp4', 'processed_run-1/bird_17.mp4', 'processed_run-1/bird_18.mp4', 'processed_run-1/bird_19.mp4', 'processed_run-1/bird_20.mp4', 'processed_run-1/caterpillar_1.mp4', 'processed_run-1/caterpillar_2.mp4', 'processed_run-1/caterpillar_3.mp4', 'processed_run-1/caterpillar_4.mp4', 'processed_run-1/caterpillar_5.mp4', 'processed_run-1/caterpillar_6.mp4', 'processed_run-1/caterpillar_7.mp4', 'processed_run-1/caterpillar_8.mp4', 'processed_run-1/caterpillar_9.mp4', 'processed_run-1/caterpillar_10.mp4', 'processed_run-1/caterpillar_11.mp4', 'processed_run-1/caterpillar_12.mp4', 'processed_run-1/caterpillar_13.mp4', 'processed_run-1/caterpillar_14.mp4', 'processed_run-1/caterpillar_15.mp4', 'processed_run-1/caterpillar_16.mp4', 'processed_run-1/caterpillar_17.mp4', 'processed_run-1/caterpillar_18.mp4', 'processed_run-1/caterpillar_19.mp4', 'processed_run-1/caterpillar_20.mp4', 'processed_run-1/dog_1.mp4', 'processed_run-1/dog_2.mp4', 'processed_run-1/dog_3.mp4', 'processed_run-1/dog_4.mp4', 'processed_run-1/dog_5.mp4', 'processed_run-1/dog_6.mp4', 'processed_run-1/dog_7.mp4', 'processed_run-1/dog_8.mp4', 'processed_run-1/dog_9.mp4', 'processed_run-1/dog_10.mp4', 'processed_run-1/dog_11.mp4', 'processed_run-1/dog_12.mp4', 'processed_run-1/dog_13.mp4', 'processed_run-1/dog_14.mp4', 'processed_run-1/dog_15.mp4', 'processed_run-1/dog_16.mp4', 'processed_run-1/dog_17.mp4', 'processed_run-1/dog_18.mp4', 'processed_run-1/dog_19.mp4', 'processed_run-1/dog_20.mp4', 'processed_run-1/dummy.mp4', 'processed_run-1/fish_1.mp4', 'processed_run-1/fish_2.mp4', 'processed_run-1/fish_3.mp4', 'processed_run-1/fish_4.mp4', 'processed_run-1/fish_5.mp4', 'processed_run-1/fish_6.mp4', 'processed_run-1/fish_7.mp4', 'processed_run-1/fish_8.mp4', 'processed_run-1/fish_9.mp4', 'processed_run-1/fish_10.mp4', 'processed_run-1/fish_11.mp4', 'processed_run-1/fish_12.mp4', 'processed_run-1/fish_13.mp4', 'processed_run-1/fish_14.mp4', 'processed_run-1/fish_15.mp4', 'processed_run-1/fish_16.mp4', 'processed_run-1/fish_17.mp4', 'processed_run-1/fish_18.mp4', 'processed_run-1/fish_19.mp4', 'processed_run-1/fish_20.mp4', 'processed_run-1/frog_1.mp4', 'processed_run-1/frog_2.mp4', 'processed_run-1/frog_3.mp4', 'processed_run-1/frog_4.mp4', 'processed_run-1/frog_5.mp4', 'processed_run-1/frog_6.mp4', 'processed_run-1/frog_7.mp4', 'processed_run-1/frog_8.mp4', 'processed_run-1/frog_9.mp4', 'processed_run-1/frog_10.mp4', 'processed_run-1/frog_11.mp4', 'processed_run-1/frog_12.mp4', 'processed_run-1/frog_13.mp4', 'processed_run-1/frog_14.mp4', 'processed_run-1/frog_15.mp4', 'processed_run-1/frog_16.mp4', 'processed_run-1/frog_17.mp4', 'processed_run-1/frog_18.mp4', 'processed_run-1/frog_19.mp4', 'processed_run-1/frog_20.mp4', 'processed_run-1/horse_1.mp4', 'processed_run-1/horse_2.mp4', 'processed_run-1/horse_3.mp4', 'processed_run-1/horse_4.mp4', 'processed_run-1/horse_5.mp4', 'processed_run-1/horse_6.mp4', 'processed_run-1/horse_7.mp4', 'processed_run-1/horse_8.mp4', 'processed_run-1/horse_9.mp4', 'processed_run-1/horse_10.mp4', 'processed_run-1/horse_11.mp4', 'processed_run-1/horse_12.mp4', 'processed_run-1/horse_13.mp4', 'processed_run-1/horse_14.mp4', 'processed_run-1/horse_15.mp4', 'processed_run-1/horse_16.mp4', 'processed_run-1/horse_17.mp4', 'processed_run-1/horse_18.mp4', 'processed_run-1/horse_19.mp4', 'processed_run-1/horse_20.mp4', 'processed_run-1/shark_1.mp4', 'processed_run-1/shark_2.mp4', 'processed_run-1/shark_3.mp4', 'processed_run-1/shark_4.mp4', 'processed_run-1/shark_5.mp4', 'processed_run-1/shark_6.mp4', 'processed_run-1/shark_7.mp4', 'processed_run-1/shark_8.mp4', 'processed_run-1/shark_9.mp4', 'processed_run-1/shark_10.mp4', 'processed_run-1/shark_11.mp4', 'processed_run-1/shark_12.mp4', 'processed_run-1/shark_13.mp4', 'processed_run-1/shark_14.mp4', 'processed_run-1/shark_15.mp4', 'processed_run-1/shark_16.mp4', 'processed_run-1/shark_17.mp4', 'processed_run-1/shark_18.mp4', 'processed_run-1/shark_19.mp4', 'processed_run-1/shark_20.mp4', 'processed_run-1/snake_1.mp4', 'processed_run-1/snake_2.mp4', 'processed_run-1/snake_3.mp4', 'processed_run-1/snake_4.mp4', 'processed_run-1/snake_5.mp4', 'processed_run-1/snake_6.mp4', 'processed_run-1/snake_7.mp4', 'processed_run-1/snake_8.mp4', 'processed_run-1/snake_9.mp4', 'processed_run-1/snake_10.mp4', 'processed_run-1/snake_11.mp4', 'processed_run-1/snake_12.mp4', 'processed_run-1/snake_13.mp4', 'processed_run-1/snake_14.mp4', 'processed_run-1/snake_15.mp4', 'processed_run-1/snake_16.mp4', 'processed_run-1/snake_17.mp4', 'processed_run-1/snake_18.mp4', 'processed_run-1/snake_19.mp4', 'processed_run-1/snake_20.mp4', 'processed_run-1/spider_1.mp4', 'processed_run-1/spider_2.mp4', 'processed_run-1/spider_3.mp4', 'processed_run-1/spider_4.mp4', 'processed_run-1/spider_5.mp4', 'processed_run-1/spider_6.mp4', 'processed_run-1/spider_7.mp4', 'processed_run-1/spider_8.mp4', 'processed_run-1/spider_9.mp4', 'processed_run-1/spider_10.mp4', 'processed_run-1/spider_11.mp4', 'processed_run-1/spider_12.mp4', 'processed_run-1/spider_13.mp4', 'processed_run-1/spider_14.mp4', 'processed_run-1/spider_15.mp4', 'processed_run-1/spider_16.mp4', 'processed_run-1/spider_17.mp4', 'processed_run-1/spider_18.mp4', 'processed_run-1/spider_19.mp4', 'processed_run-1/spider_20.mp4', 'processed_run-1/wasp_1.mp4', 'processed_run-1/wasp_2.mp4', 'processed_run-1/wasp_3.mp4', 'processed_run-1/wasp_4.mp4', 'processed_run-1/wasp_5.mp4', 'processed_run-1/wasp_6.mp4', 'processed_run-1/wasp_7.mp4', 'processed_run-1/wasp_8.mp4', 'processed_run-1/wasp_9.mp4', 'processed_run-1/wasp_10.mp4', 'processed_run-1/wasp_11.mp4', 'processed_run-1/wasp_12.mp4', 'processed_run-1/wasp_13.mp4', 'processed_run-1/wasp_14.mp4', 'processed_run-1/wasp_15.mp4', 'processed_run-1/wasp_16.mp4', 'processed_run-1/wasp_17.mp4', 'processed_run-1/wasp_18.mp4', 'processed_run-1/wasp_19.mp4', 'processed_run-1/wasp_20.mp4']
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  expName = video_rating
  keyboardBackend = ioHub
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Routines
  Routine waiting_for_scanner
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    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Before JS Experiment:
        var video_path
        var stimuli
        var participant
        var df
      Begin Experiment:
        participant = expInfo['participant']
        stimuli = expInfo['stimuli']
      Begin JS Experiment:
        participant = expInfo["participant"];
        stimuli = expInfo["stimuli"];
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be presented with the videos you saw in the scanner.

        After each video, please provide subjective ratings of three attributes:

        Fearfulness, disgustingness, and cuteness.

        Press [SPACE] to begin.
  Routine dummy
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    TextComponent dummy_fixation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine end
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    TextComponent end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Ratings complete. Thank you!
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  Routine video_trial
    RoutineSettingsComponent video_trial
      disabled = True
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    CodeComponent video_trial_code
      Code Type = Py
      Begin Routine:
        if ".mp4" not in df["file"][trials.thisN]:
            is_active = False
            continueRoutine = False
        else:
            is_active = True


        if is_active:
            df.at[trials.thisN, "onset"] = timer.getTime()
      End Routine:
        if is_active:
            df.at[trials.thisN, "duration"] = timer.getTime() - df.at[trials.thisN, "onset"]
            df.to_csv("df.txt", index_label="index")
  Routine washout
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    TextComponent fixation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine pause
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    CodeComponent pause_code
      Code Type = Py
      Begin Routine:
        if (not trials.thisN % 15 == 0) or (trials.thisN == 0):
            continueRoutine = False
        else:
            frac_completed = int((trials.thisN + 1) * 100 / len(df))
            break_text.text = f"Break\n\n{frac_completed}% of trials completed\n\nAlert experimenter when you wish to continue"
      Each Frame:
        if key_resp_pause.keys == 'space':
            current_time = timer.getTime()
            margin = current_time - round(current_time) # Should be between 0 and 0.01
            if (margin >= 0) & (margin < 0.01):
                continueRoutine = False
    TextComponent break_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine trial
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    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $file
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp_trial
      allowedKeys = 't','b','y'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      store = all keys
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    TextComponent debug_text
      color = black
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine ratings
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    CodeComponent ratings_code
      Code Type = Auto->JS
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      End Routine:
        #df.at[trials.thisN, "fear"] = fear_slider.getRating()
        #df.at[trials.thisN, "disgust"] = disgust_slider.getRating()
        #df.at[trials.thisN, "cute"] = cute_slider.getRating()
        #
        #
        #if not os.path.exists(f"data/{participant}"):
        #    os.makedirs(f"data/{participant}")
        #
        #df.to_csv(f"data/{participant}/sub-{participant}_stimuli-{stimuli}_ratings.txt", index_label="index")
    SliderComponent fear_slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent fear_text
      color = black
      letterHeight = 0.05
      pos = (-0.7, 0.2)
      startVal [time (s)] = 0.0
      text = Fear
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    SliderComponent disgust_slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      letterHeight = 0.05
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent cute_slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent disgust_text
      color = black
      letterHeight = 0.05
      pos = (-0.7, 0)
      startVal [time (s)] = 0.0
      text = Disgust
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    TextComponent cute_text
      color = black
      letterHeight = 0.05
      pos = (-0.7, -0.2)
      startVal [time (s)] = 0.0
      text = Cuteness
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    ButtonComponent button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Done
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    TextComponent button_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Done
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  Routine fixation_2
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine waiting_for_scanner
  Routine fixation_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $'conditions_run-' + stimuli + '.csv'
    loopType = random
    nReps = 200
    random seed = participant
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    Routine trial
    Routine ratings
    Routine washout
  LoopTerminator trials
  Routine end
